PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 3
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = emo_EEG
  keyboardBackend = PsychToolbox
  runMode = 0
  rush = True
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Routines
  Routine Start
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    TextComponent StartText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In this task, you will listen to a series of sentences spoken with different emotions.

        After each block, you will answer one question about the emotion you heard

        Use the button box to answer 1 or 2.

        First, you will listen to sentences spoken with a neutral emotion.

        Press 1 when you are ready to start.
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent start
      Code Type = Py
      disabled = True
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      Begin Experiment:
        import serial

        port=serial.Serial("COM4", baudrate=115200)
      End Experiment:
        port.close()
  Routine Next
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    TextComponent NextText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Press 1 when you are ready to start.
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    KeyboardComponent NextKey
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question
    RoutineSettingsComponent Question
      stopVal [duration (s)] = 15
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    ImageComponent Q1_Image
      image [set every repeat] = $Q_path
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Q1_Key
      allowedKeys [set every repeat] = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent start_2
      Code Type = Py
      disabled = True
      Begin Experiment:
        import serial

        port=serial.Serial("COM4", baudrate=115200)
      Begin Routine:
        #port.write(b'1')

        #val = 255
        #val_inbytes = val.to_bytes(1,byteorder='big')
        #port.write(val_inbytes)
  Routine Testing
    RoutineSettingsComponent Testing
      stopVal [duration (s)] = $emo_audio.duration
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    SoundComponent emo_audio
      forceEndRoutine = False
      sound [set every repeat] = $audio_path
      startVal [time (s)] = 0
      stopWithRoutine = False
      syncScreenRefresh = False
      volume = .15
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    TextComponent fixation
      letterHeight = .15
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent code
      Code Type = Py
      disabled = True
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      Begin Routine:
        #port.write(b'1')

        val = trig_value
        val_inbytes = val.to_bytes(1,byteorder='big')
        port.write(val_inbytes)
      End Experiment:
        port.close()
  Routine Training
    RoutineSettingsComponent Training
      stopVal [duration (s)] = $neutral_audio.duration
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    SoundComponent neutral_audio
      forceEndRoutine = False
      sound [set every repeat] = C:/projects/emo_EEG/emo_experiment/stimuli/Fem_ADS_neu_cont_1.wav
      startVal [time (s)] = 0.0
      volume = .15
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    TextComponent text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent training
      Code Type = Py
      disabled = True
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      Begin Routine:
        port.write(b'0')
      End Experiment:
        port.close()
  Routine prepare
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    TextComponent countdown1
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent countdown2
      letterHeight = 0.25
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 4
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    TextComponent countdown3
      letterHeight = 0.25
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent countdown4
      letterHeight = 0.25
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent countdown5
      letterHeight = 0.25
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine test_start
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, you will listen to sentences spoken with either happy or sad emotion.

        Press 1 when you are ready to start.
    KeyboardComponent key_resp_2
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feeback
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    CodeComponent Feeback1
      Code Type = Auto->JS
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      Begin Routine:
        if(Q1_Key.corr == 1):
            feedback_text1 = "Correct!"
        else:
            feedback_text1 = "Sorry, you got this one wrong!"
    TextComponent Feedeback1_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text1
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Flow
  Routine Start
  Routine prepare
  Routine Training
  Routine test_start
  LoopInitiator QuietLoop loopType="TrialHandler"
    conditionsFile = audio_order.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Male_CDS_hap_cont_3.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 1, 'trig_value': 1},
      {'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Fem_ADS_sad_cont_2.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 2, 'trig_value': 2},
      {'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Fem_CDS_hap_cont_3.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 1, 'trig_value': 3},
      {'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Fem_CDS_sad_cont_4.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 2, 'trig_value': 4},
      {'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Male_CDS_hap_cont_2.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 1, 'trig_value': 5},
      {'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Fem_CDS_hap_cont_4.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 1, 'trig_value': 6},
      {'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Male_ADS_sad_cont_3.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 2, 'trig_value': 7},
      {'audio_path': 'C:\\projects\\emo_EEG\\emo_experiment\\stimuli\\Fem_ADS_sad_cont_3.wav', 'Q_path': 'C:\\projects\\emo_EEG\\emo_experiment\\Qfile\\emo.BMP', 'corrAns': 2, 'trig_value': 8}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
    Routine prepare
    Routine Testing
    Routine Question
    Routine Next
  LoopTerminator QuietLoop
